/* Based on Durstewitz and Gabriel 2006, "Irregular spiking in NMDA-driven prefrontal cortex neurons"
   Written 18-04-08, modified 29/07/09
   This file makes connections between 4 PCcells and 1 interneuron. The connections are all-with-all, with the same weights for feedforward and feedback synapses, but with diffrent for autapses. Also the number of synapses PCcells to interneuon and interneuron to PCcells are different*/ 

//xopen ("pfc_pc_temp.hoc") //load template for pyramidal cells
//xopen ("incell.hoc")      //load template for interneuron

//----------------------------Insert variables to be used for stimulations and connections-----------------------------//
//--------------------Insert variable for random placement of synapses and delays in the connections
objref r, f, fin, fpin, finp, fp, stimrand
//---- Section Reference Variables----//
BDendsNo = 18
objref SectionArray[nPCcells][BDendsNo]
objref auxilist_basal[nPCcells] 
for lala=0, (nPCcells-1) {
	auxilist_basal[lala] = new List()
}
objref random_basal[nPCcells]
                    for gaga=0, (nPCcells-1) {
                    	random_basal[gaga] = new SectionList()
                    }
objref rnd, distancesMat, pidMat
distancesMat = new Matrix(nPCcells,(PC2PC_MaxSyn+2)*nPCcells)
pidMat = new Matrix(nPCcells,(PC2PC_MaxSyn+2)*nPCcells)
/*//-----------------------Stimulations
total=1600
lala=20
objref nc1[nPCcells][total], ns1, nc2[nPCcells][total], ampapr[nPCcells][total], nmdapr[nPCcells][total], nc3[nPCcells*60][total], ns2, nc4[nPCcells*60][total], ampal[nPCcells][total], nmdal[nPCcells][total], gabaal[nPCcells][total], gababl[nPCcells][total]
//------------Second stimulus
objref ns3, nc5[nPVcells][total], nc6[nPVcells][total], ampasin[nPVcells][total], nmdasin[nPVcells][total]
objref nc7[nPCcells][total], nc8[nPCcells][total], ampasp[nPCcells][total], nmdasp[nPCcells][total]
 */
//-----------------------Stimulations
objref ncAMPA[nPCcells][Stim_MaxSyn], nsNMDA[nPCcells][Stim_MaxSyn],nsAMPA[nPCcells][Stim_MaxSyn], ncNMDA[nPCcells][Stim_MaxSyn], ampapr[nPCcells][Stim_MaxSyn], nmdapr[nPCcells][Stim_MaxSyn]
//PC-PC connections
//autosynapses
objref autoampaOnPC[nPCcells][PC_MaxAutosyn]
objref autonmdaOnPC[nPCcells][PC_MaxAutosyn]
objref conautoampaPC2PC[nPCcells][PC_MaxAutosyn]
objref conautonmdaPC2PC[nPCcells][PC_MaxAutosyn]
//recurrent synapses
objref ampaOnPC[nPCcells][nPCcells][PC2PC_MaxSyn]
objref nmdaOnPC[nPCcells][nPCcells][PC2PC_MaxSyn]
objref conampaPC2PC[nPCcells][nPCcells][PC2PC_MaxSyn]
objref connmdaPC2PC[nPCcells][nPCcells][PC2PC_MaxSyn]


//PV-PV connections
objref gabaOnPV_A[nPVcells][nPVcells][PV2PV_MaxSyn]
objref congabaPV2PV_A[nPVcells][nPVcells][PV2PV_MaxSyn]

//PC-PV connections
objref ampaOnPV[nPCcells][nPVcells][PC2PV_MaxSyn]
objref nmdaOnPV[nPCcells][nPVcells][PC2PV_MaxSyn]
objref conampaPC2PV[nPCcells][nPVcells][PC2PV_MaxSyn]
objref connmdaPC2PV[nPCcells][nPVcells][PC2PV_MaxSyn]

//PC-CB connections
objref ampaOnCB[nPCcells][nCBcells][PC2CB_MaxSyn]
objref nmdaOnCB[nPCcells][nCBcells][PC2CB_MaxSyn]
objref conampaPC2CB[nPCcells][nCBcells][PC2CB_MaxSyn]
objref connmdaPC2CB[nPCcells][nCBcells][PC2CB_MaxSyn]

//--------------------PC-CR connections
  objref ampaOnCR[nPCcells][nCRcells][PC2CR_MaxSyn]
  objref nmdaOnCR[nPCcells][nCRcells][PC2CR_MaxSyn]
  objref conampaPC2CR[nPCcells][nCRcells][PC2CR_MaxSyn]
  objref connmdaPC2CR[nPCcells][nCRcells][PC2CR_MaxSyn]

//--------------------PV-PC connections
  objref gabaOnPC_A[nPVcells][nPCcells][PV2PC_MaxSyn]
  objref gabaOnPC_B[nPVcells][nPCcells][PV2PC_MaxSyn]
  objref congabaPV2PC_A[nPVcells][nPCcells][PV2PC_MaxSyn]
  objref congabaPV2PC_B[nPVcells][nPCcells][PV2PC_MaxSyn]

//--------------------CB-PC connections
  objref gabaOnPC_CB_A[nCBcells][nPCcells][CB2PC_MaxSyn]
  objref congabaCB2PC_A[nCBcells][nPCcells][CB2PC_MaxSyn]

//--------------------CR-PC connections
objref gabaOnPC_CR_A[nCRcells][nPCcells][CR2PC_MaxSyn]
objref congabaCR2PC_A[nCRcells][nPCcells][CR2PC_MaxSyn]

//--------------------CR-CB connections
objref gabaOnCB_CR_A[nCRcells][nCBcells][CR2CB_MaxSyn]
objref congabaCR2CB_A[nCRcells][nCBcells][CR2CB_MaxSyn]

// others
//objref PCns[nPCcells], PVns[nPVcells], CBns[nCBcells], CRns[nCRcells]
//objref PCsw[nPCcells], PVsw[nPVcells], CBsw[nCBcells], CRsw[nCRcells]
objref PCns, PVns, CBns, CRns
objref PCsw, PVsw, CBsw, CRsw
/*
                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                             //--------------------Others 
objref ic, ic1[11]  //IClamp
objref sinw[nPCcells], w[lala][total][nPCcells], ramp//membrane noise
                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                            objref insinw[nPVcells], inw[lala][total][nPVcells], ramp
                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                            //objref variousdata
                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                                            strdef tmpstr */
//--------------------Background activity 
objref vstim[nPCcells][500]
objref ampaBG[nPCcells][500]
objref VSvector[nPCcells][500]
objref BG1[nPCcells][500]

//----------------------------------------------Insert noise-----------------------------------------------------------//
//INSERT MOD FILE FOR SINE WAVE
proc noise() { local ctr 
	PCns = new List()
	PVns = new List()
	CBns = new List()
	CRns = new List()
	PCsw = new List()
	PVsw = new List()
	CBsw = new List()
	CRsw = new List()

	ctr = 0
	forsec PCsoma_list {
		PCsw.append( new SinClamp(0.5) )
		PCsw.o(ctr).del=0  
		PCsw.o(ctr).dur=tstop
		PCsw.o(ctr).freq = 80 
		PCns.append( new Random(ctr+$1) )
		PCns.o(ctr).poisson(0.02)
		PCns.o(ctr).play(&PCsw.o(ctr).pkamp)
		ctr=ctr+1
	} 
	ctr = 0
	forsec PVsoma_list {
		PVsw.append( new SinClamp(0.5) )
		PVsw.o(ctr).del=0  
		PVsw.o(ctr).dur=tstop
		PVsw.o(ctr).freq = 80 
		PVns.append( new Random(ctr+$1) )
		PVns.o(ctr).poisson(0.02)  
		PVns.o(ctr).play(&PVsw.o(ctr).pkamp)
		ctr=ctr+1
	} 
	ctr = 0
	forsec CBsoma_list {
		CBsw.append( new SinClamp(0.5) )
		CBsw.o(ctr).del=0  
		CBsw.o(ctr).dur=tstop
		CBsw.o(ctr).freq = 80 
		CBns.append( new Random(ctr+$1) )
		CBns.o(ctr).poisson(0.02)   
		CBns.o(ctr).play(&CBsw.o(ctr).pkamp)
		ctr=ctr+1
	} 
	ctr = 0
	forsec CRsoma_list {
		CRsw.append( new SinClamp(0.5) )
		CRsw.o(ctr).del=0  
		CRsw.o(ctr).dur=tstop
		CRsw.o(ctr).freq = 80 
		CRns.append( new Random(ctr+$1) )
		CRns.o(ctr).poisson(0.035)  
		CRns.o(ctr).play(&CRsw.o(ctr).pkamp)
		ctr=ctr+1
	} 

}

//---------------------------Initial stimulation (proximal dendrite)(Kuroda, 1998, Constantinides, 2001)---------------//
//objref rApic, rBasal

//variousdata= new File()

proc stimulation() { local i,j,PID,ApicalNo,rApicIdx,BasalNo,rBasalIdx, interval, number  localobj r,rApic,rBasal
interval = 200//50
number = 20

if(PARALLEL){ PC.barrier() }


r = new Random($1+165)
PID = r.uniform(0, 1)
rApic = new Random($1+12)
rBasal = new Random($1+67)

for i=0, PCcells.count() - 1  { 
	// Apical input:
	for j=0, ((Stim_MaxSyn/2)-1) {
		PID=0.5//r.repick()
		rApicIdx = 0//int(rApic.uniform(0,PCcells.o(i).ApicNo-1))
		PCcells.o(i).apic[rApicIdx] ampapr[i][j]=new GLU(PID)
		PCcells.o(i).apic[rApicIdx] nmdapr[i][j]=new NMDA(PID)

		nsAMPA[i][j]=new NetStim(0.5) //was 0.5
		nsAMPA[i][j].interval=interval
		nsAMPA[i][j].number=number
		nsAMPA[i][j].start=0
		nsAMPA[i][j].noise=0

		nsNMDA[i][j]=new NetStim(0.5) //was 0.5
		nsNMDA[i][j].interval=interval
		nsNMDA[i][j].number=number
		nsNMDA[i][j].start=0
		nsNMDA[i][j].noise=0
		
		ncAMPA[i][j]=new NetCon(nsAMPA[i][j], ampapr[i][j])
		ncAMPA[i][j].delay=12
		ncAMPA[i][j].weight=0.000162//ampaArr.x[PcellIDlist.x[PCgids.x(i)]]
		ncAMPA[i][j].threshold=-20 

                ncNMDA[i][j]=new NetCon(nsNMDA[i][j], nmdapr[i][j])
		ncNMDA[i][j].delay=12
		ncNMDA[i][j].weight=0.000763//nmdaArr.x[PcellIDlist.x[PCgids.x(i)]]                       
                ncNMDA[i][j].threshold=-20
                //if(PLOT){splot.point_mark(nmdapr[i][j],1)} //colorize
	}


	//Basal input:
	for j=(Stim_MaxSyn/2), (Stim_MaxSyn-1) {
		PID=0.5//r.repick()

		rBasalIdx = 0//int(rBasal.uniform(0,PCcells.o(i).DendNo-1))
		PCcells.o(i).dend[rBasalIdx] ampapr[i][j]=new GLU(PID)// sta apical!!!!!
		PCcells.o(i).dend[rBasalIdx] nmdapr[i][j]=new NMDA(PID)//nmda_segev(PID)

		nsAMPA[i][j]=new NetStim(0.5) //was 0.5
		nsAMPA[i][j].interval=interval
		nsAMPA[i][j].number=number
		nsAMPA[i][j].start=0
		nsAMPA[i][j].noise=0

		nsNMDA[i][j]=new NetStim(0.5) //was 0.5
		nsNMDA[i][j].interval=interval
		nsNMDA[i][j].number=number
		nsNMDA[i][j].start=0
		nsNMDA[i][j].noise=0

		ncAMPA[i][j]=new NetCon(nsAMPA[i][j], ampapr[i][j])
		ncAMPA[i][j].delay=100 //+ PID*2
		ncAMPA[i][j].weight = 0.000162//ampaArr.x[PcellIDlist.x[PCgids.x(i)]]  //*0.7
		ncAMPA[i][j].threshold=-20 

		ncNMDA[i][j]=new NetCon(nsNMDA[i][j], nmdapr[i][j])
		ncNMDA[i][j].delay=100 //+ PID*2 
		ncNMDA[i][j].weight = 0.000763//nmdaArr.x[PcellIDlist.x[PCgids.x(i)]]  *0.8                 
		ncNMDA[i][j].threshold= -20 
		//if(PLOT){splot.point_mark(nmdapr[i][j],2)} //colorize
	}	
}
} //end proc


proc clampStim() { local i,j,PID,ApicalNo,rApicIdx,BasalNo,rBasalIdx, interval, number  localobj r,rApic,rBasal
	duration = 500//50
	amplitude = 100

	if(PARALLEL){ PC.barrier() }
	//i=0
	//if(PARALLEL){
	//if(PC.gid_exists(i)){
		for i=0, PCcells.count() - 1  { 
				PCcells.o(i).soma {nsAMPA[i][j]=new IClamp(0.5)} //was 0.5
				nsAMPA[i][j].dur=duration
				nsAMPA[i][j].amp=amplitude		
		//}
	//}else{
		/*PCcells.o(i).soma {nsAMPA[i][j]=new IClamp(0.5)} //was 0.5
				nsAMPA[i][j].dur=duration
				nsAMPA[i][j].amp=amplitude*/	
	}
} //end proc



proc backgroundActivity() { local i,j,PID,RV,RLB,RLA localobj r,rv,rlb,rla

r = new Random($1 + 300)
rv = new Random($1)
RV = rv.uniform(1, 5000)
PID = r.uniform(0,1)
rlb = new Random($1+160)
rla = new Random($1+560)
BGweight = 0.0007//4

for i=0, PCcells.count()-1 {

	RLB = rlb.uniform(0,PCcells.o(i).DendNo-1)
	RLA = rla.uniform(0,PCcells.o(i).ApicNo-1)

	for j=0, 164 {
		VSvector[i][j] = new Vector(10)
		for t=0,9{
			VSvector[i][j].x[t] = RV
			RV = rv.repick()
		}
		VSvector[i][j].sort()
		PCcells.o(i).dend[RLB] ampaBG[i][j]=new GLU(PID)
		PID = r.repick()
		RLB = rlb.repick()
		vstim[i][j] = new VecStim(0.5)
		vstim[i][j].delay = 0
		vstim[i][j].play(VSvector[i][j])
		BG1[i][j]=new NetCon(vstim[i][j], ampaBG[i][j])
		BG1[i][j].delay=0
		BG1[i][j].weight =   BGweight
		BG1[i][j].threshold=-20 
	}
	for j=165, 330 {
		VSvector[i][j] = new Vector(10)
		for t=0,9{
			VSvector[i][j].x[t] = RV
			RV = rv.repick()
		}
		VSvector[i][j].sort()
		PCcells.o(i).apic[RLA] ampaBG[i][j]=new GLU(PID)
		PID = r.uniform(0,1)
		RLA = rla.repick()
		vstim[i][j] = new VecStim(0.5)
		vstim[i][j].delay = 0
		vstim[i][j].play(VSvector[i][j])
		BG1[i][j]=new NetCon(vstim[i][j], ampaBG[i][j])
		BG1[i][j].delay=0
		BG1[i][j].weight =   BGweight
		BG1[i][j].threshold=-20 
	}
	for j=331, 499 {
		VSvector[i][j] = new Vector(10)
		for t=0,9{
			VSvector[i][j].x[t] = RV
			RV = rv.repick()
		}
		VSvector[i][j].sort()
		PCcells.o(i).soma ampaBG[i][j]=new GLU(PID)
		PID = r.uniform(0,1)
		vstim[i][j] = new VecStim(0.5)
		vstim[i][j].delay = 0
		vstim[i][j].play(VSvector[i][j])
		BG1[i][j]=new NetCon(vstim[i][j], ampaBG[i][j])
		BG1[i][j].delay=0
		BG1[i][j].weight =   BGweight
		BG1[i][j].threshold=-20 
	}
}

}//end proc

// ---------------------------------PC-PC connections, basal dendrite(Thomson, 1997)------------------------------------//

proc connectPC2PC() { local i,j,FIDp,PID,BasalNo,rDendidx,synCtr,trg,src,syn localobj r,fp,rDend
	if(PARALLEL){ PC.barrier() }

	r = new Random($1 + 350)
	PID = r.uniform(0,1)
	fp = new Random($1+3)	
	rDend = new Random($1+4)
	//rDendidx = rDend.uniform(0,17)	
	FIDp=fp.normal(1.7,0.9)	//According to Thomson(2007)

	//---------------------------------------------------Insert Autapses(Lubke, 1996)


	/*for i=0, PCcells.count()-1 {
			PCcells.o(i).soma distance()
			if (connMatrix.x[PCgids.x(i)][PCgids.x(i)]) { //If autapses are enabled..
				for j=0, (PC_MaxAutosyn-1) { 
					PID=r.repick()
					FIDp=abs(fp.repick())

					rDendidx = int(rDend.uniform(0,PCcells.o(i).DendNo-1) )
					PCcells.o(i).dend[rDendidx] autoampaOnPC[i][j] = new GLU(PID) 
					PCcells.o(i).dend[rDendidx] autonmdaOnPC[i][j] = new NMDA(PID)//nmda_segev(PID) 
			//----------------------Connect autapses
					PCcells.o(i).axon conautoampaPC2PC [i][j] = new NetCon(&v(1), autoampaOnPC[i][j], -20, FIDp, ampaArr.x[PcellIDlist.x[PCgids.x(i)]] )
					PCcells.o(i).axon conautonmdaPC2PC [i][j] = new NetCon(&v(1), autonmdaOnPC[i][j], -20, FIDp, nmdaArr.x[PcellIDlist.x[PCgids.x(i)]] )

					distancesMat.x[i][0] = distance(PID)
					pidMat.x[i][0] = PID
					//if(PLOT){splot.point_mark(autonmdaOnPC[i][j],3)} //colorize
				}
			}
		}*/
	//--------------------------Create SectionReference list for basal dendrites---------------//
	// connect PC 2 PC with connectivity/weights from MATLAB:
	synCtr = 0
	for trg=0, PCcells.count()-1 { 
		for src=0,PCcells.count()-1 {
			if(connMatrix.x[PCgids.x(src)][PCgids.x(trg)]){
				if(DEBUG){printf("Connectivity constraint: PC%d projects to PC%d\n",PCgids.x(src),PCgids.x(trg))}
				for syn=0, (PC2PC_MaxSyn-1) { //for current syn
					PID=r.repick()
					FIDp=abs(fp.repick())

					rDendidx = int(rDend.uniform(0,PCcells.o(trg).DendNo-1) )
					PCcells.o(trg).dend[rDendidx] ampaOnPC[src][trg][syn] = new GLU(PID)
					PCcells.o(trg).dend[rDendidx] nmdaOnPC[src][trg][syn] = new NMDA(PID)//nmda_segev(PID)

					conampaPC2PC[src][trg][syn] = makeSynapse(PCcells,PCgids.x(src),ampaOnPC[src][trg][syn],-20,FIDp,ampaArr.x[PcellIDlist.x[PCgids.x(trg)]] )
					connmdaPC2PC[src][trg][syn] = makeSynapse(PCcells,PCgids.x(src),nmdaOnPC[src][trg][syn],-20,FIDp,nmdaArr.x[PcellIDlist.x[PCgids.x(trg)]] )

					distancesMat.x[trg][synCtr+1] = distance(PID)
					pidMat.x[trg][synCtr+1] = PID
					//if(PLOT){splot.point_mark(nmdaOnPC[src][trg][syn],4)} //colorize
					synCtr = synCtr+1 //because we have multiple cells
				}
			}
		}
		synCtr = 0
	}
} //END procedure initPC



//---------------------------------------------PV-PV connections--------------------------------------------------------//
proc connectPV2PV() { local delstimpvpv,PID,src,trg,syn localobj r,fpvpv
	if(PARALLEL){ PC.barrier() }
r = new Random($1 + 250)
PID = r.uniform(0,1)
fpvpv = new Random($1-100)
delstimpvpv=fpvpv.normal(1.76,0.07)		//latency from IN-IN, according to Bacci (2003)   

for src=0, PVcells.count()-1 {
	for trg=0, PVcells.count()-1 {
		if (connMatrix.x[PVgids.x(src)][PVgids.x(trg)]) { //NO NEED to account for PC overhead in matrix, gid are GLOBAL ID ;)
			for syn=0, (PV2PV_MaxSyn-1) {
				PID = r.repick ()
				delstimpvpv=abs(fpvpv.repick())
				PVcells.o(trg).soma gabaOnPV_A[src][trg][syn] = new GABAain(PID)
				congabaPV2PV_A[src][trg][syn] = makeSynapse(PVcells,PVgids.x(src),gabaOnPV_A[src][trg][syn],-20,delstimpvpv,autogabaweight )
			}
		}
	}
}
} // End procedure initPV

//----------------------------------------------PC-PV connections-------------------------------------------------------//
proc connectPC2PV() { local delstimpcpv,PID,src,trg,syn localobj r,fpcpv
	if(PARALLEL){ PC.barrier() }
r = new Random($1 + 150)
PID = r.uniform(0,1)
fpcpv = new Random($1*2)
delstimpcpv=fpcpv.normal(0.6, 0.2)		//latency from Pc-In, according to Thomson(2007), also Angulo,Audinat(1999)

for src=0, PCcells.count()-1 {
	for trg=0, PVcells.count()-1 {
		if (connMatrix.x[PCgids.x(src)][PVgids.x(trg)]) { //if connection exists; account for PC overhead in matrix
			for syn=0, (PC2PV_MaxSyn-1) {
				PID = r.repick ()
				delstimpcpv=abs(fpcpv.repick())
				PVcells.o(trg).soma ampaOnPV[src][trg][syn] = new GLUIN(PID) //no Dends available in the model!
				PVcells.o(trg).soma nmdaOnPV[src][trg][syn] = new NMDA(PID)

				conampaPC2PV[src][trg][syn] = makeSynapse(PCcells,PCgids.x(src), ampaOnPV[src][trg][syn], -20, delstimpcpv, ampaweightin*2.9)
				connmdaPC2PV[src][trg][syn] = makeSynapse(PCcells,PCgids.x(src), nmdaOnPV[src][trg][syn], -20, delstimpcpv, nmdaweightin*2.9)    
			}
		}
	}
}
} //end procedure initPC2PV


//----------------------------------------------PC-CB connections-------------------------------------------------------//
proc connectPC2CB() {local i, j, k,delstimpccb,src,trg,syn localobj fpccb
	if(PARALLEL){ PC.barrier() }
fpccb = new Random($1*2)
delstimpccb=fpccb.normal(0.6, 0.2)		//latency from Pc-Cb, according to Thomson(2007), also Angulo,Audinat(1999)

for src=0, PCcells.count()-1 {
	for trg=0, CBcells.count()-1 {
		if (connMatrix.x[PCgids.x(src)][CBgids.x(trg)]) { 
			//----------------------------Insert synapses at dendrites
			for syn=0,(PC2CB_MaxSyn-1) { 
				delstimpccb=abs(fpccb.repick())
				CBcells.o(trg).dend ampaOnCB[src][trg][syn] = new GLUIN(0.5) //TO SEE XENIA, 6/07/11
				CBcells.o(trg).dend nmdaOnCB[src][trg][syn] = new NMDA(0.5)

				conampaPC2CB[src][trg][syn] = makeSynapse(PCcells,PCgids.x(src), ampaOnCB[src][trg][syn], -20, delstimpccb, ampaweight_pc2cb)
				connmdaPC2CB[src][trg][syn] = makeSynapse(PCcells,PCgids.x(src), nmdaOnCB[src][trg][syn], -20, delstimpccb, nmdaweight_pc2cb)
				//if(PLOT){splot.point_mark(ampaOnCB[src][trg][syn],5)} //colorize
			}
		}
	}
}
}//proc pyrcb()

//----------------------------------------------PC-CR connections-------------------------------------------------------//
proc connectPC2CR() {local i, j, k ,BasalNo,delstimpccr,src,trg,syn localobj fpccr
	if(PARALLEL){ PC.barrier() }
fpccr = new Random($1*2)
delstimpccr=fpccr.normal(0.6, 0.2)		//latency from Pc-Cb, according to Thomson(2007), also Angulo,Audinat(1999)
//delstim=0.6


for src=0, PCcells.count()-1 {
	for trg=0, CRcells.count()-1 {
		if (connMatrix.x[PCgids.x(src)][CRgids.x(trg)]) { //if connection exists; account for PC overhead in matrix
			//----------------------------Insert synapses at dendrites
			for syn=0,(PC2CR_MaxSyn-1) { 
				delstimpccr=abs(fpccr.repick())
				CRcells.o(trg).dend[0] ampaOnCR[src][trg][syn] = new GLUIN(0.5) 
				CRcells.o(trg).dend[0] nmdaOnCR[src][trg][syn] = new NMDA(0.5)
				conampaPC2CR[src][trg][syn]  = makeSynapse(PCcells,PCgids.x(src), ampaOnCR[src][trg][syn], -20, delstimpccr, ampaweight_pc2cr)
				connmdaPC2CR[src][trg][syn]  = makeSynapse(PCcells,PCgids.x(src), nmdaOnCR[src][trg][syn], -20, delstimpccr, nmdaweight_pc2cr)
				//if(PLOT){splot.point_mark(ampaOnCR[src][trg][syn],5)} //colorize
			}
		}
	}
}

}// proc pyrcr()


//------------------------------------------------PV-PC connections-----------------------------------------------------//
proc connectPV2PC() {local delstimpvpc,PID,NoSynapsesSoma,NoSynapsesDend,BasalNo,rDendidx,src,trg,syn localobj r,fpvpc,rDend
	if(PARALLEL){ PC.barrier() }
r = new Random($1 + 180)
PID = r.uniform(0,1)
fpvpc = new Random($1*8)
rDend = new Random($1+5)
delstimpvpc=fpvpc.normal(1.8, 0.8)	//latency from IN-Pc, according to Thomson(2007)
NoSynapsesSoma = int(PV2PC_MaxSyn * 46 / 100) //percentage (paper?)
NoSynapsesDend = PV2PC_MaxSyn - NoSynapsesSoma

//-----------------------------Connect
for src=0, PVcells.count()-1 {
	for trg=0,PCcells.count()-1 {
		if (connMatrix.x[PVgids.x(src)][PCgids.x(trg)]) { //if connection exists; account for PC overhead in matrix
			//----------------------------Insert synapses at dendrites
			for syn=0,(NoSynapsesDend-1) { 
				PID = r.repick()
				rDendidx = int(rDend.uniform(0,PCcells.o(trg).DendNo-1) )
				PCcells.o(trg).dend[rDendidx] gabaOnPC_A[src][trg][syn] = new GABAa(PID) //was @ soma initially...
				PCcells.o(trg).dend[rDendidx] gabaOnPC_B[src][trg][syn] = new GABAb(PID)
				//if(PLOT){splot.point_mark(gabaOnPC_A[src][trg][syn],5)} //colorize
			}
			//----------------------------Insert synapses at soma
			for syn=0,(NoSynapsesSoma-1) { 
				PID = r.repick()					

				PCcells.o(trg).soma gabaOnPC_A[src][trg][syn+NoSynapsesDend] = new GABAa(PID) //carefull not to overwrite array!
				PCcells.o(trg).soma gabaOnPC_B[src][trg][syn+NoSynapsesDend] = new GABAb(PID)

				//if(PLOT){splot.point_mark(gabaOnPC_A[src][trg][syn+NoSynapsesDend],5)} //colorize
			}

			for syn=0, (PV2PC_MaxSyn-1) { //for total number of IN-PC synapses
				delstimpvpc=abs(fpvpc.repick())
				congabaPV2PC_A[src][trg][syn] = makeSynapse(PVcells,PVgids.x(src), gabaOnPC_A[src][trg][syn], -20, delstimpvpc, gabaweight_pv2pc_a)
				congabaPV2PC_B[src][trg][syn] = makeSynapse(PVcells,PVgids.x(src), gabaOnPC_B[src][trg][syn], -20, delstimpvpc, gabaweight_pv2pc_b)
			}
		}
	}
}
}  //end procedure initPV2PC


//------------------------------------------------CB-PC connections to d2--------------------------------------------------//
proc connectCB2PC() {local BasalNo,PID,delstimcbpc,rDendidx,src,trg,syn  localobj r,fcbpc,rDend
	if(PARALLEL){ PC.barrier() }
r = new Random($1 + 170)
PID = r.uniform(0,1)
rDend = new Random($1+6)
fcbpc = new Random($1*9)
delstimcbpc=fcbpc.normal(1.8, 0.8)	//latency from CB-Pc, according to Thomson(2007)
//delstimcbp=1.8

for src=0, CBcells.count()-1 {
	for trg=0,PCcells.count()-1 {
		if (connMatrix.x[CBgids.x(src)][PCgids.x(trg)]) { //if connection exists; account for PC overhead in matrix
			//----------------------------Insert synapses at distal dendrites
			rDendidx = int(rDend.uniform(0,PCcells.o(trg).DendNo-1) )
			for syn=0,(CB2PC_MaxSyn-1) { 
				delstimcbpc=abs(fcbpc.repick())
				PCcells.o(trg).dend[rDendidx] gabaOnPC_CB_A[src][trg][syn] = new GABAa(1)//cheating! must find distal basal somehow.
				congabaCB2PC_A[src][trg][syn]  = makeSynapse(CBcells,CBgids.x(src), gabaOnPC_CB_A[src][trg][syn], -20, delstimcbpc, gabaweight_cb2pc)
				//if(PLOT){splot.point_mark(gabaOnPC_CB_A[src][trg][syn],5)} //colorize
			}
		}
	}
}
}// proc cbpyr2()


//------------------------------------------------CR-PC connections to d2---------------------------------------------------//
proc connectCR2PC() {local delstimcrpc,PID,BasalNo,rDendidx,src,trg,syn  localobj fcrpc,rDend
	if(PARALLEL){ PC.barrier() }
fcrpc = new Random($1*9)
rDend = new Random($1+6)
delstimcrpc=fcrpc.normal(1.8, 0.8)	//latency from CB-Pc, according to Thomson(2007)
//delstimcbp=1.8

for src=0, CRcells.count()-1 {
	for trg=0,PCcells.count()-1 {
		if (connMatrix.x[CRgids.x(src)][PCgids.x(trg)]) { //if connection exists; account for PC overhead in matrix
			//----------------------------Insert synapses at distal dendrites
			for syn=0,(CR2PC_MaxSyn-1) { 
				delstimcrpc=abs(fcrpc.repick())

				rDendidx = int(rDend.uniform(0,PCcells.o(trg).DendNo-1) )
				PCcells.o(trg).dend[rDendidx] gabaOnPC_CR_A[src][trg][syn] = new GABAa(1)//cheating! must find distal basal somehow.
				congabaCR2PC_A[src][trg][syn]  = makeSynapse(CRcells,CRgids.x(src), gabaOnPC_CR_A[src][trg][syn], -20, delstimcrpc, gabaweight_cr2pc)
				//if(PLOT){splot.point_mark(gabaOnPC_CR_A[src][trg][syn],5)} //colorize
			}
		}
	}
}
}// proc crpyr2()




//------------------------------------------------CR-CB connections-----------------------------------------------------//
proc connectCR2CB() {local BasalNo,delstimcrcb,src,trg,syn localobj fcrcb
	if(PARALLEL){ PC.barrier() }
fcrcb = new Random($1*9)
delstimcrcb=fcrcb.normal(1.8, 0.8)	//latency from CB-Pc, according to Thomson(2007)
//delstimcbp=1.8

for src=0, CRcells.count()-1 {
	for trg=0,CBcells.count()-1 {
		if (connMatrix.x[CRgids.x(src)][CBgids.x(trg)]) { //if connection exists; account for PC overhead in matrix
			//----------------------------Insert synapses at dendrites
			for syn=0,(CR2CB_MaxSyn-1) { 
				delstimcrcb=abs(fcrcb.repick())

				CBcells.o(trg).dend gabaOnCB_CR_A[src][trg][syn] = new GABAa(0.5) //CBs only have one dendrite
				congabaCR2CB_A[src][trg][syn] = makeSynapse(CRcells,CRgids.x(src), gabaOnCB_CR_A[src][trg][syn], -20, delstimcrcb, gabaweight_cr2cb)
				//if(PLOT){splot.point_mark(gabaOnCB_CR_A[src][trg][syn],5)} //colorize
			}
		}
	}
}
}// proc crcb()



//------------------------------------Pharmacological procedures
proc sadp_soma() {
	forsec PCsoma_list{ //soma_list
		for(x) {
			if(ismembrane("ican")) for(x) { gbar_ican(x)= gbar_ican(x)  *fadp}  //0.0001  *fadp//i Nassi exei pio poly ican !
		}}}
proc sadp_dend() {
	forsec PCdend_list{
		for(x) {
			if(ismembrane("ican")) for(x) { gbar_ican(x)= gbar_ican(x)*fadp} //0.0001*0.1
		}}}

proc sadp_apical() {
	forsec PCapical_list {
		for(x) {
			if(ismembrane("ican"))  for(x) { gbar_ican(x)= gbar_ican(x)*fadp} //0.0001*0.1
		}}}

proc thinner_basal(){
	forsec PCdend_list{
		print diam
		diam = (diam*95)/100
		print diam
	}}

proc thinner_apical(){
	forsec PCapical_list{
		print diam
		diam = (diam*95)/100
		print diam
	}}

proc ECA_30(){ local evaValue
	ecaValue = 30
	forsec PCapical_list{
	print eca
	eca = ecaValue
	print eca
}
forsec PCdend_list{
	print eca
	eca = ecaValue
	print eca
}
forsec PCsoma_list{
	print eca
	eca =ecaValue
	print eca
}
}

// train for fADP validation:
objref ic2[5]

           proc train() {
	initDelay = 1000
	for i=0,4 {
		PCcells.o(0).soma ic2[i]=new IClamp(0.5)
		ic2[i].del=initDelay	
		ic2[i].dur=5
		ic2[i].amp=3//(nA)
		initDelay = initDelay + 50
	}
}


