// will be Vectors that record all spike times (tvec) 
// see also http://www.neuron.yale.edu/neuron/static/docs/help/neuron/neuron/classes/parcon.html#spike_record

// store voltage currents to files
strdef str, vfilePC_filename, EXEC_CMD

// If you save the stdout to a file you can sort the results. A nice idiom is sort -k 1n,1n -k 2n,2n temp1 > temp
//All the spike times and cells are the same as in the serial implementation, as we can verify by capturing the outputs of the two programs to files, sorting the parallel output, and comparing
//$ # numeric sort on spike time, then cell id 
//$ sort -n -k 1 -k 2 serout.txt > sorted_serout.txt 
//$ sort -n -k 1 -k 2 parout.txt > sorted_parout.txt 
//$ cmp sorted_serout.txt sorted_parout.txt

// see this here on the topic of storing membrane voltage in a parallel context: http://www.neuron.yale.edu/phpbb/viewtopic.php?f=31&t=1987
objref r_volts[nAllCells],r_msec
r_msec = new Vector(n)
for q=0,n-1 {r_msec.x[q]=q*dt }

objref r_dvolts[nPCcells][DEND_NSEG]
//objref r_dvolts[offsets.x[offsets.size()-1]]
// each recorded range variable must have a separate tvec which will be different for different cells
objref recordedCells
recordedCells = new Vector()
objref recordedDends
recordedDends = new Vector()
// recording routines for the parallel context
proc rec_soma_voltage(){local i,s,q,trgGID,trg  // use gid as parameter
	trgGID = $1
	print "recording voltage of soma ",trgGID
	if (PARALLEL) {
		if (PC.gid_exists(trgGID)) { 
			r_volts[trgGID]=new Vector(n)
			//Also a known bug:
			//http://www.neuron.yale.edu/phpbb/viewtopic.php?f=31&t=2046
			PC.gid2cell(trgGID).soma {cv.record(&v(0.5),r_volts[trgGID],r_msec,0)}
			recordedCells.append(trgGID)
		}
	}else{
		r_volts[trgGID]=new Vector(n)
		if (trgGID < nPCcells) {
			print "PCsoma NOPC condition"
			PCcells.o(trgGID).soma {cv.record(&v(0.5),r_volts[trgGID],r_msec,0)}
		}else{
			print "PVsoma NOPC condition"
			//These are the PV cells now:
			PVcells.o(trgGID - nPCcells).soma {cv.record(&v(0.5),r_volts[trgGID],r_msec,0)}
		}
		recordedCells.append(trgGID)
	}
}

proc rec_dend_voltage(){local i,s,q,trgGID,trg  // use gid as parameter
	trgGID = $1
	if (PARALLEL) {
		if (PC.gid_exists(trgGID)) { 
			initial = (1/DEND_NSEG)/2
			for cseg = 0,DEND_NSEG-1 {
				r_dvolts[trgGID][cseg]=new Vector(n)
				csegloc = initial + (1/DEND_NSEG)*cseg
				PC.gid2cell(trgGID).dend {cv.record(&v(csegloc),r_dvolts[trgGID][cseg],r_msec,0)}
			}
			recordedDends.append(trgGID)
		}
	}else{
		initial = (1/DEND_NSEG)/2
		for cseg = 0,DEND_NSEG-1 {
			r_dvolts[trgGID][cseg]=new Vector(n)
			csegloc = initial + (1/DEND_NSEG)*cseg
			PCcells.o(trgGID).dend {cv.record(&v(csegloc),r_dvolts[trgGID][cseg],r_msec,0)}
		}
		recordedDends.append(trgGID)
	}
}

